PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'Welcome to Virtual Reading Test!': 'Please wait for resources to download and then click OK'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['welcomeText.png', 'next_button.png', 'fonts/ArialFont.woff', 'fonts/Garamond.woff', 'fonts/LexendDeca.woff', 'fonts/Montserrat.woff', 'fonts/NotoSans.woff', 'fonts/Roboto.woff', 'fonts/TimesNew.woff', 'stimuli/testFastest.xlsx', 'stimuli/demographics.xlsx', 'bank-1300155_640.png', 'blocks/blocks_1.xlsx']
  Screen = 1
  Units = pix
  Use version = 2022.2.3
  Window size (pixels) = [1680, 1050]
  color = white
  expName = Welcome to Virtual Reading Test!
  keyboardBackend = ioHub
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Routines
  Routine instructions_questions
    TextComponent text_2
      color = black
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        You've finished reading this passage.

        In the next section, you will answer multiple choice questions about the passage.

        Click on the answer you think best suits the passage.

        Please press the button below to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = JS
      Begin JS Routine:
        text_2.setAlignHoriz("left");
    ImageComponent nextButton_questionInstructions
      image = next_button.png
      pos = (buttonX,buttonY)
      size = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseQuestionInstructions
      clickable = nextButton_questionInstructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 2
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  Routine setBlockParameters
    CodeComponent blockParameters
      Code Type = JS
      Begin JS Routine:
        // block information (get from the blocks file)
        blockFileName    = thisBlock['stimulus_file']   // name of the excel file that contains stim set for the block
        dotIndex         = blockFileName.indexOf(".");
        blockName        = blockFileName.slice(0, (dotIndex));      // remove .xlsx from the file name
        blockName        = blockName.substring(8)                  // remove "stimuli/" text from the block name

        // practice and test trials, fonts and their names (get from the blocks file)
        practiceCount    = thisBlock['practiceTrials']; // how many practice trials
        testCount        = thisBlock['testTrials'];     // how many test trials
        blockFonts       = thisBlock['testFonts'];  // which fonts will be used in this block as test fonts
        practiceFonts    = thisBlock['practiceFonts'] // get the practice font
        blockFontLabels  = thisBlock['fontLabels']
        blockFontLabels  = blockFontLabels.split(";")
        blockFonts       = blockFonts.split(";")
        blockFontCount   = blockFonts.length;
        repFontTrials    = testCount / blockFontCount; // these two have to be divisible

        getFastestFont = [];
        for (var i = 0; i < blockFontCount; i++) {
          getFastestFont[blockFonts[i]] = [0,0];
        }
        console.log('fastest fonts',getFastestFont)

        // reproduce block fonts in an array to match the trial count
        // e.g. blockFonts = ["arial", "helvetica"], repFontTrials = 2
        // new block font variable: blockFonts = ["arial", "helvetica", "arial", "helvetica"];
        blockFontsForDisplay = [];
        for (var i = 0; i < repFontTrials; i++) {
          blockFontsForDisplay = blockFontsForDisplay.concat(blockFonts);
        }

        // counterbalance order of font weights
        blockFontsForDisplay   = balancedLatinSquare(blockFontsForDisplay,PID);
        // ["arial", "helvetica", "arial", "helvetica"]
        // ["arial", "arial", "helvetica", "helvetica"] = (group 'A') = (PID = 0)
        // ["arial","helvetica", "helvetica", "arial"] = (group 'B') = (PID = 1) etc.

        // add the practice font to the beginning of the counterbalanced font order
        blockFontsForDisplay.unshift(practiceFonts);
        console.log("displayed fonts")
        console.log(blockFontsForDisplay)
        // counterbalance order of passage sets
        passageSetIndices = range(1,testCount);
        passageSetOrder   = balancedLatinSquare(passageSetIndices,PID);

        // always show the practice trial (0 index) the first, so we concatenate the latin-square
        // balanced array to 0.
        passageSetOrder.unshift(0);

        // block iteration index
        blockIteration = thisBlock.thisN;

        // initiate/reset trial iteration index
        trialIteration = -1;
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  Routine initialize
    CodeComponent functionsOnly
      Code Type = JS
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      Begin JS Experiment:
        // randomly generate letters from an array

        function makeid2() {
          var text = "";
          var possible = "ABCDEF";

          for (var i = 0; i < 1; i++)
            text += possible.charAt(Math.floor(Math.random() * possible.length));

          return text;
        }

        makeid=makeid2;
        // find index of a string element in an array
        function findIndices2(listVariable, elementToSearch) {
            var matchIndex, searchItIndex;
            matchIndex = [];
            searchItIndex = 0;
            for (var i, _pj_c = 0, _pj_a = listVariable, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                if ((i === elementToSearch)) {
                    matchIndex.push(searchItIndex);
                }
                searchItIndex = (searchItIndex + 1);
            }
            return matchIndex;
        }
        findIndices = findIndices2;


        // shuffle array: randomly shuffles the order of elements in an array.
        function randomArrayShuffle2(o){
            for(var j, x, i = o.length; i; j = parseInt(Math.random() * i), x = o[--i], o[i] = o[j], o[j] = x);
            return o;
        }

        randomArrayShuffle = randomArrayShuffle2;

        function randomIntFromInterval2(min, max) { // min and max included
          return Math.floor(Math.random() * (max - min + 1) + min)
        }
        randomIntFromInterval = randomIntFromInterval2;


        function range2(start, end) {
            if(start === end) return [start];
            return [start, ...range(start + 1, end)];
        }
        range = range2;
        // Latin Square design generator

        // How to use:
        // var conditions = ["A", "B", "C", "D"];
        // balancedLatinSquare(conditions, 0)  //=> ["A", "B", "D", "C"]
        // balancedLatinSquare(conditions, 1)  //=> ["B", "C", "A", "D"]
        // balancedLatinSquare(conditions, 2)  //=> ["C", "D", "B", "A"]
        // ...
        function balancedLatinSquare2(array, participantId) {
         var result = [];
         // Based on "Bradley, J. V. Complete counterbalancing of immediate sequential effects in a Latin square design. J. Amer. Statist. Ass.,.1958, 53, 525-528. "
         for (var i = 0, j = 0, h = 0; i < array.length; ++i) {
          var val = 0;
          if (i < 2 || i % 2 != 0) {
           val = j++;
          } else {
           val = array.length - h - 1;
           ++h;
          }

          var idx = (val + participantId) % array.length;
          result.push(array[idx]);
         }

         if (array.length % 2 != 0 && participantId % 2 != 0) {
          result = result.reverse();
         }

         return result;
        }

        balancedLatinSquare = balancedLatinSquare2;



        /////////////////////////////////////
        //// font normalization function ////
        /////////////////////////////////////

        Array.prototype.sum = function() {
            return this.reduce(function(a,b){return a+b;});
        };

        Array.prototype.mean = function() {
            return this.sum() / this.length;
        };

        // CONTROL vars (Times)
        unitsPerEm_ctrl = 1000;
        xHeight_ctrl = 448;
        width_ctrl = 556.388855;
        height_ctrl = 707.977295;
        size_ctrl = 16;
        yourX=0
        xHeight_ctrl_weight = 448/unitsPerEm_ctrl;
        width_ctrl_weight   = 556.388855/unitsPerEm_ctrl;
        height_ctrl_weight  = 707.977295/unitsPerEm_ctrl;

        xHeightSourceDelta =  0.44970703125;
        widthSourceDelta =  0.5528367565524194;
        heightSourceDelta =  0.6362068422379032;

        chars = '1234567890qwertyuiopasdfghjklzxcvbnmQWERTYUIOPASDFGHJKLZXCVBNM';
        chars_check = chars.split('');
        chars_decimal = [49, 50, 51, 52, 53, 54, 55, 56, 57, 48, 113, 119, 101, 114, 116, 121, 117, 105, 111, 112, 97, 115, 100, 102, 103, 104, 106, 107, 108, 122, 120, 99, 118, 98, 110, 109, 81, 87, 69, 82, 84, 89, 85, 73, 79, 80, 65, 83, 68, 70, 71, 72, 74, 75, 76, 90, 88, 67, 86, 66, 78, 77];

        //chars = 'Adobe';
        chars_check = chars.split('');
        chars_decimal = [];
        chars_check.forEach(e => {
            chars_decimal.push(e.codePointAt());
        });


        chars_unicode = ['0x0031','0x0032','0x0033','0x0034','0x0035','0x0036','0x0037','0x0038','0x0039','0x0030','0x0071','0x0077','0x0065','0x0072','0x0074','0x0079','0x0075','0x0069','0x006f','0x0070','0x0061','0x0073','0x0064','0x0066','0x0067','0x0068','0x006a','0x006b','0x006c','0x007a','0x0078','0x0063','0x0076','0x0062','0x006e','0x006d','0x0051','0x0057','0x0045','0x0052','0x0054','0x0059','0x0055','0x0049','0x004f','0x0050','0x0041','0x0053','0x0044','0x0046','0x0047','0x0048','0x004a','0x004b','0x004c','0x005a','0x0058','0x0043','0x0056','0x0042','0x004e','0x004d'];

        function log(str) {
            console.log(str);
        };

        function print_server_load(name,path) {
            log("@font-face {");
            log("    font-family: '" + name + "';");
            log("    font-style: normal;");
            log("    font-weight: normal;");
            log("    src: local('" + name + "'), url('fonts/" + path + "') format('truetype');");
            log("}");
        };

        function print_css(name,name_css,factor,size) {
            log("p." + name_css + "_" + factor + " {");
            log("    font-family: '" + name + "' !important;");
            log("    font-size: " + size + "px;");
            log("}");
        }

        function gen_normalization2(fontPath,name,name_css) {
            opentype.load(fontPath, function(err, font) {
                if (err) {
                    alert('Font ' + fontPath + ' could not be loaded: ' + err);
                } else {
                    // Now let's display it on a canvas with id "canvas"
                    console.log('normalization')
                    //console.log(document.getElementById('canvas'))
                    //console.log(document.getElementById('canvas').getContext)
                    //console.log(document.getElementById('canvas').getContext('2d'))
                    //var ctx = document.getElementById('canvas').getContext('2d');

                    // Construct a Path object containing the letter shapes of the given text.
                    // The other parameters are x, y and fontSize. Note that y is the position of the baseline.
                    var path = font.getPath(chars, 0, 0, 16);

                    //
                    var xHeight = font.tables.os2.sxHeight; // sxHeight could be missing from some fonts
                    var widths = [];
                    var heights = [];

                   var xMinFont = 0;
                   var xMaxFont = 0;
                   var yMinFont = 0;
                   var yMaxFont = 0;

                    //compute max width/height
                    Object.keys(font.glyphs.glyphs).forEach(function (k) {
                        var glyph = font.glyphs.glyphs[k];
                        var unicode_decimal = glyph.unicode;
                        if (chars_decimal.includes(unicode_decimal)) {
                            if(glyph.xMin < xMinFont)
                                xMinFont = glyph.xMin;
                            if(glyph.xMax > xMaxFont)
                                xMaxFont = glyph.xMax;
                            if(glyph.yMin < yMinFont)
                                yMinFont = glyph.yMin;
                            if(glyph.yMax > yMaxFont)
                                yMaxFont = glyph.yMax;
                        }
                    });

                    Object.keys(font.glyphs.glyphs).forEach(function (k) {
                        var glyph = font.glyphs.glyphs[k];
                        var char = glyph.name;
                        var unicode_decimal = glyph.unicode;

                        var lsb = glyph.leftSideBearing;
                        var rsb = glyph.advanceWidth - (lsb + glyph.xMax - glyph.xMin); //right side bearing

                        var width = glyph.xMax - glyph.xMin;
                        width = glyph.advanceWidth;
                        //width = glyph.xMax - glyph.xMin;

                        var yMinGlyph = glyph.yMin;
                        var yMaxGlyph = glyph.yMax;
                        var yMinFinal = yMinFont;
                        var yMaxFinal = yMaxFont;

                        if (yMinFont > yMinGlyph)
                            yMinFinal = yMinGlyph;
                        if (yMaxFont < yMaxGlyph)
                            yMaxFinal = yMaxGlyph;

                        var height = glyph.yMax - glyph.yMin;
                        if (chars_decimal.includes(unicode_decimal)) {
                            widths.push(width);
                            heights.push(height);
                        }
                        if(unicode_decimal === 120) { // x
                            xHeight = yMaxGlyph - yMinGlyph;
                        }
                    });

                    let unitsPerEm = font.tables.head.unitsPerEm;

                    let xHeightDelta = xHeight/unitsPerEm;
                    let widthDelta = widths.mean()/unitsPerEm;
                    let heightDelta = heights.mean()/unitsPerEm;

                    let x = 16*(1+((xHeightSourceDelta-xHeightDelta)/xHeightDelta));
                    let w = 16*(1+((widthSourceDelta-widthDelta)/widthDelta));
                    let h = 16*(1+((heightSourceDelta-heightDelta)/heightDelta));

                    yourX = (1+((xHeightSourceDelta-xHeightDelta)/xHeightDelta));
                    console.log('yourX')
                    console.log(yourX)
                    return yourX

                }
            });

        }

        gen_normalization = gen_normalization2;
    CodeComponent variables
      Code Type = JS
      Begin JS Experiment:
        // redirect back to readabilitylab.xyz
        psychoJS.setRedirectUrls('https://readabilitylab.xyz','');

        ///////////////////////////////////////////////////////////////
        //// BLOCK AND TRIAL RELATED PARAMETERS - COUNTERBALANCING ////
        ///////////////////////////////////////////////////////////////


        //thisGroup = await psychoJS.shelf.counterBalanceSelect({key: ['pilot_child'], groups: ['A', 'B','C','D','E','F'], groupSizes: [2,2,2,2,2,2]})
        thisGroup = {};
        thisGroup.group = makeid();
        //PID = randomIntFromInterval(0,5);
        if (thisGroup.group === 'A'){
            PID = 0;
        }
        if (thisGroup.group === 'B') {
            PID = 1;
        }
        if (thisGroup.group === 'C') {
            PID = 2;
        }
        if (thisGroup.group === 'D') {
            PID = 3;
        }
        if (thisGroup.group === 'E') {
            PID = 4;
        }
        if (thisGroup.group === 'F') {
            PID = 5;
        }


        participantCode = randomIntFromInterval(100000,999999);
        expInfo["participant"] = participantCode.toString() + thisGroup.group;
        console.log("group",thisGroup.group)
        console.log("PID",PID)
        console.log('subject code',expInfo["participant"]);
        psychoJS.experiment.dataFileName = (("." + "/") + `data/${expInfo["participant"]}_${expName}_${expInfo["date"]}`);
        passageSetOrder = [];

        //////////////////////////////////////////////////////////////////////////
        //// TEXT PARAMETERS (pixels, size multipliers, wrapwidth, position.) ////
        //////////////////////////////////////////////////////////////////////////
        // text sizes
        baseSizePixels = 16;
        questionSizeMultiplier = 1.2;
        passageSizeMultiplier = 1.8;
        instructionSizeMultiplier = 1.5;
        passageTextSize = baseSizePixels * passageSizeMultiplier;
        questionTextSize = baseSizePixels * questionSizeMultiplier; // used in questions etc.
        instructionTextSize = baseSizePixels * instructionSizeMultiplier;
        // window pixel sizes below (h horizontal, v vertical)
        vsize = psychoJS.window.size[1];
        hsize = psychoJS.window.size[0];

        // text wrapping and position parameters
        wrapWidthText = hsize*4/5;
        wrapWidthPassages = hsize/2;
        // x axis starting point for passages
        xAxisCenterPassages =  -hsize/4;
        // x axis starting point for other text (instructions etc.)
        xAxisCenter = -hsize * 2/5;
        // screen scale instructions
        topScreenInstruction = vsize * 3/10;
        bottomScreenInstruction = -vsize * 3/10;
        // next button size and position
        buttonWidth = hsize/10;
        buttonHeight = vsize/10;

        buttonX = hsize * 4/10;
        buttonY = 0-(vsize * 4/10);

        // final link positions
        formLinkX = hsize * 3/10;
        formLinkY = 0-(vsize * 3/10);

        websiteLinkX = 0-(hsize * 3/10);
        websiteLinkY = 0-(vsize * 3/10);
        // question text positions
        questionsXaxis = -hsize*45/100;
        questionsTopYaxis = vsize*10/100;
        questionsBottomYaxis = -vsize*35/100;
        // slider positions and size
        sliderPosition = [-hsize*45/100, -vsize*10/100];
        sliderSize = [hsize*1/100, vsize*20/100];
        // textbox position and size
        textboxSize = [hsize * 2/5, vsize*7.5/100];
        textboxPosition = [xAxisCenter, 0];
        console.log("hsize",hsize,"vsize",vsize)
        console.log("wrapwidthText",wrapWidthText,"xAxis",xAxisCenter)
        console.log("wrapwidthPass",wrapWidthPassages,"xAxisPass",xAxisCenterPassages)


        passageYaxis = -200;
        // scaling parameters
        y_scale = 1;
        x_scale = 1;

        // clock
        myClock = new util.Clock();
        //////////////////////////////////////////////////////////////////////////
        //// DATA REGISTRY VARIABLES (accuracy, rt, date, blocks, trials etc) ////
        //////////////////////////////////////////////////////////////////////////
        totalTrialIterationIndex = 0;
        accuracyTotal = [0,0];

        data_totalTrialIndex= [];
        data_dateTime       = [];
        data_miniRating     = [];
        data_trialType      = [];
        data_itemID         = [];
        data_itemType       = [];
        data_passageRT      = [];
        data_passageFont    = [];
        data_compAccuracy   = [];
        data_compChoice     = [];
        data_blockName      = [];
        data_zoomLevel      = [];
        currentFontType     = [];
        currentRT           = [];
        browserZoom         = [];
    CodeComponent dataregistery
      Code Type = JS
      Begin JS Experiment:
        thisExp = psychoJS.experiment;
        // write trial by trial data
        trialColumNames = ["trialNo","itemID" ,"blockName", "trialType", "FontName", "wordsPerMinute", "comprehensionAccuracy", "comprehensionChoice","miniSurveyRating"];

        // add headers right above the data
        psychoJS.experiment.addData("dateTime", "dateTime")
        psychoJS.experiment.addData(trialColumNames[0], trialColumNames[0]);
        psychoJS.experiment.addData("subid", "subid")
        psychoJS.experiment.addData("counterbalanceGroup", "counterbalanceGroup")
        psychoJS.experiment.addData(trialColumNames[1], trialColumNames[1]);
        psychoJS.experiment.addData(trialColumNames[2], trialColumNames[2]);
        psychoJS.experiment.addData(trialColumNames[3], trialColumNames[3]);
        psychoJS.experiment.addData(trialColumNames[4], trialColumNames[4]);
        psychoJS.experiment.addData(trialColumNames[5], trialColumNames[5]);
        psychoJS.experiment.addData(trialColumNames[6], trialColumNames[6]);
        psychoJS.experiment.addData(trialColumNames[7], trialColumNames[7]);
        psychoJS.experiment.addData(trialColumNames[8], trialColumNames[8]);
        psychoJS.experiment.addData("X_Scale", "X_Scale");
        psychoJS.experiment.addData("Y_Scale", "Y_Scale");
        psychoJS.experiment.addData("IsFullScreen", "IsFullScreen")
        psychoJS.experiment.addData("window_width", "window_width")
        psychoJS.experiment.addData("window_height", "window_height")
        psychoJS.experiment.addData("browser", "browser")
        psychoJS.experiment.addData("browserZoomLevel", "browserZoomLevel")
        psychoJS.experiment.nextEntry();
  Routine instructions_passage
    TextComponent readPassageInstructions
      color = black
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        In the next section, please try to read the passage at your normal speed without reading aloud, re-reading, or taking breaks, and then press the button at the bottom of the screen when you finish.

        • Keep in mind you will answer questions after reading.

        • If you need to take a very short break please do so now.

        Once you are ready, please press the button below to continue.
    CodeComponent code_4
      Code Type = JS
      Begin JS Routine:
        readPassageInstructions.setAlignHoriz("left");
    ImageComponent nextButton_readingInstructions
      image = next_button.png
      pos = (buttonX,buttonY)
      size = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseReadingInstructions
      clickable = nextButton_readingInstructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 2
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  Routine setTrialParameters
    CodeComponent getTrialParameters
      Code Type = JS
      Begin JS Routine:
        // setup trial parameters
        trialproperties = thisStimulus_list["trialproperties"] // cell that indicates the number of passages and questions
        trialproperties = trialproperties.split(";")
        //passage counts
        passageCount = trialproperties[0]
        passageCount = Number(passageCount[passageCount.length-1]) // get the last element (count)
        //question counts
        questionCount = trialproperties[1]
        questionCount = Number(questionCount[questionCount.length-1]) // get the last element (count)
        //mini survey count
        miniSurveyCount = trialproperties[2]
        miniSurveyCount = Number(miniSurveyCount[miniSurveyCount.length-1]) // get the last element (count)
        //randomization of passages within a set (1= yes, 0=no)
        randomizePassages = trialproperties[3]
        randomizePassages = Number(randomizePassages[randomizePassages.length-1]) // get the last element (count)
        //randomization of questions within a set (1= yes, 0=no)
        randomizeQuestions = trialproperties[4]
        randomizeQuestions = Number(randomizeQuestions[randomizeQuestions.length-1]) // get the last element (count)

        // create passage index array
        rand_po = [];
        for (var i, _pj_c = 0, _pj_a = util.range(0, passageCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            rand_po.push(_pj_c+1);
        }

        // create question index array
        rand_qo = [];
        for (var i, _pj_c = 0, _pj_a = util.range(0, questionCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            rand_qo.push(_pj_c+1);
        }

        // create mini survey index array
        rand_mo = [];
        for (var i, _pj_c = 0, _pj_a = util.range(0, miniSurveyCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            rand_mo.push(_pj_c+1);
        }


        //randomize passage and question orders
        if (randomizePassages === 1) {
            rand_po = randomArrayShuffle(rand_po);

        }
        if (randomizeQuestions === 1) {
             rand_qo = randomArrayShuffle(rand_qo);
             rand_mo = randomArrayShuffle(rand_mo);
            }


        // what is this trial: practice or test?
        trialType = thisStimulus_list['trialType'];
        // increase trial iteration index for each iteration of stimulus list
        trialIteration = trialIteration +1;
        totalTrialIterationIndex = totalTrialIterationIndex+1;
  Routine displayPassaages
    CodeComponent passageCode
      Code Type = JS
      Begin JS Routine:
        currentTrialType = thisStimulus_list["trialType"];
        if (currentTrialType === "test") {
                registerResponse = 1;
            } else {
                    registerResponse = 0;
                }
        // call font to be displayed in this trial
        currentFont             = blockFontsForDisplay[trialIteration];
        currentFontSize         = normalized_xsizes[currentFont];
        currentFontSize         = currentFontSize * y_scale;
        currentHeightDifference = heightDifferences[currentFont];
        console.log('currentSize', currentFontSize);
        console.log('currentFont', currentFont)
        // create the excel column name that represents the current passage text
        passageIdentifier = ('pas'+((rand_po[passage_trials.thisN]).toString())+'text')
        itemIDIdentifier = ('pas'+((rand_po[passage_trials.thisN]).toString())+'ID')
        // call the passage text
        currentPassage = thisStimulus_list[passageIdentifier];
        // what is the item type (passage, comp question, mini survey?)
        itemID = thisStimulus_list[itemIDIdentifier];

        // count how many words there are in this passage
        wordCount = currentPassage;
        wordCount = wordCount.replace(/'+/g, ''); // remove apostrophes
        wordCount = wordCount.replace(/-+/g, ' '); // turn dashes into sapce
        wordCount = wordCount.replace(/\s+/g, ' '); // turn more than one space into one space
        wordCount = wordCount.replace(/[\W_]+/g," "); // turn all non alphanumericals into space
        wordCount = wordCount.split(" "); // split the text by spaces
        splitWord = wordCount;
        wordCount = wordCount.length -1 // count how many words there are (-1 because .split creates a [""] element in the array. We remove that by -1.

        passageWord = splitWord.slice(0,2); // get first three words of the passage to identify it within developer mode



        console.log('first word and word count of passages',passageWord,wordCount)
        console.log('passage words separated',splitWord)
        // start Timer for 2 second delay during passages
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();

        // center left
        passageText.setAlignHoriz("left");
        console.log('currentSize', currentFontSize/y_scale);
        console.log('yscale', y_scale);
        console.log('scaledsize', currentFontSize);
    TextComponent passageText
      color = black
      font [set every repeat] = $currentFont
      letterHeight [set every repeat] = currentFontSize
      pos [set every repeat] = (xAxisCenterPassages, currentHeightDifference)
      startVal [time (s)] = 0.3
      text [set every repeat] = $currentPassage
      wrapWidth = wrapWidthPassages
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    KeyboardComponent passageKeyPress
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.3
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    TextComponent wght200
      color = black
      disabled = True
      font = RobotoFlex_wght200
      letterHeight = currentFontSize
      pos = (-400, 200)
      startVal [time (s)] = 0.0
      text = weight200
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    TextComponent wght400
      color = black
      disabled = True
      font = RobotoFlex_wght400
      letterHeight = currentFontSize
      pos = (-300, 200)
      startVal [time (s)] = 0.0
      text = weight400
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    TextComponent wght600
      color = black
      disabled = True
      font = RobotoFlex_wght600
      letterHeight [set every repeat] = currentFontSize
      pos = (-200, 200)
      startVal [time (s)] = 0.0
      text = weight600
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    CodeComponent passageRegistery
      Code Type = JS
      Begin JS Routine:
        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless 2 seconds have elapsed since
        // the passage display
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;
        updateFont = 1;
        startTime = myClock.getTime();
      Each JS Frame:
        // trying to debug the error of fullscreen-miniscreen
        // display problem with fonts. First display does not show
        // the font used if you don't exit fullscreen and come back
        if (updateFont === 1) {
            passageText.setText(currentPassage);
            passageText.setFont(currentFont);
            passageText.setHeight(currentFontSize);
        }

        currentTime = myClock.getTime();

        ////////////////////////////////////////////////////////
        //// MOUSE-CLICK VERSION OF TWO SECOND DELAY SCRIPT ////
        ////////////////////////////////////////////////////////
        /*
        // && (mousePassage.time.length >= 1)
        if ((currentTime - startTime > 1 ) ){
            startTime = myClock.getTime();


            console.log('wholemouse',mousePassage)
            mouselength= mousePassage.time.length
            mouse_tStart = mousePassage.tStart; // get the mouse component's starting second
            button_tStart = nextButton_passage.tStart // get 'next button's starting second
            validClick = mousePassage.time[mouselength-1]; // get the latest mouse click-- which terminates the loop
            if (validClick >=0){
                validClickTime = validClick + mouse_tStart + button_tStart; // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
                console.log('mouse time',validClick)
                console.log('mouse rt', validClickTime)
                continueRoutine = false
            }
        }
        */


        /////////////////////////////////////////////////////
        //// KEYBOARD VERSION OF TWO SECOND DELAY SCRIPT ////
        /////////////////////////////////////////////////////
        /*
        twoSecondElapsed = currentTime-startTime >=.2;
        if (twoSecondElapsed===true) {
            if (clearEventAfterChoice === 1){
                psychoJS.eventManager.clearEvents(); // clears keypress events after choice so that previous unrelated space
                clearEventAfterChoice=0;             // does not terminate the loop prematurely
                }

            var _pj;
            function _pj_snippets(container) {
                function in_es6(left, right) {
                    if (((right instanceof Array) || ((typeof right) === "string"))) {
                        return (right.indexOf(left) > (- 1));
                    } else {
                        if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                            return right.has(left);
                        } else {
                            return (left in right);
                        }
                    }
                }
                container["in_es6"] = in_es6;
                return container;
            }

            _pj = {};
            _pj_snippets(_pj);
            keys = psychoJS.eventManager.getKeys();

                if (keys.length) {
                    if (_pj.in_es6("space", keys)) {
                        continueRoutine = false;
                    }
                }
         }
        */
      End JS Routine:
        if (registerResponse === 1) {


            // get reaction time from psychopy's keyboard component
            //passageReactionTime = passageKeyPress.rt;

            // get reaction time from psychopy's mouse component
            mouselength= mousePassage.time.length
            mouse_tStart = mousePassage.tStart; // get the mouse component's starting second
            button_tStart = passageText.tStart // get 'next button's starting second
            validClick = mousePassage.time[mouselength-1]; // get the latest mouse click-- which terminates the loop
            validClickTime = validClick + mouse_tStart - button_tStart; // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
            console.log('mouse time',validClick)
            console.log('mouse rt', validClickTime)
            passageReactionTime = validClickTime;
            // calculate words per minute
            wpm = (wordCount*(60/passageReactionTime));
            // get browser zoom
            browserZoom = window.outerWidth*100 / window.innerWidth;
            // register data
            data_zoomLevel.push(browserZoom);
            data_miniRating.push([]); // empty because there is no rating but only accuracy for comprehension questions
            data_compChoice.push([]); // empty because there is no choice during passages
            data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
            data_itemType.push("passage");  // item type (what appeared on the screen)
            data_compAccuracy.push([]); // empty because there is no accuracy during passages
            data_blockName.push(blockName); // what is the name of this block
            data_trialType.push(trialType); // is this a test or a practice trial
            data_passageFont.push(currentFont); // what was the font used in this passage
            data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)
            data_dateTime.push(util.MonotonicClock.getDateStr()); // date and time
            data_passageRT.push(wpm); // words per minute


            wpmDictionary = getFastestFont[currentFont];
            currentDictionaryWpm = wpmDictionary[0] + wpm;
            currentDictionaryDivisor = wpmDictionary[1] + 1;
            getFastestFont[currentFont] = [currentDictionaryWpm, currentDictionaryDivisor];
            console.log('dictionary itself', getFastestFont);
            console.log('dictionary wpm', getFastestFont[currentFont]);

        }
    ImageComponent nextButton_passage
      image = next_button.png
      pos = (buttonX,buttonY)
      size = (buttonWidth,buttonHeight)
      startVal [time (s)] = .45
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    MouseComponent mousePassage
      clickable = nextButton_passage
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 2
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  Routine displayQuestions
    CodeComponent initiateQuestion
      Code Type = JS
      Begin JS Routine:
        currentTrialType = thisStimulus_list["trialType"];
        if (currentTrialType === "test") {
                registerResponse = 1;
            } else {
                    registerResponse = 0;
                }

        // create the excel column name that represents the current question text
        questionIdentifier  = ('ques'+((rand_qo[question_trials.thisN]).toString())+'text')
        labelIdentifier     = ('ques'+((rand_qo[question_trials.thisN]).toString())+'label')
        itemIDIdentifier = ('ques'+((rand_po[passage_trials.thisN]).toString())+'ID')
        // call the question text
        currentQuestion     = thisStimulus_list[questionIdentifier];
        currentlabel        = thisStimulus_list[labelIdentifier];
        // what is the item type (passage, comp question, mini survey?)
        itemID = thisStimulus_list[itemIDIdentifier];
        // change additional question text's centering and style
        questionText.setAlignHoriz('left')
        questionText.bold = true;
        pressSpaceText.setAlignHoriz('left')
        pressSpaceText.bold = true;
        clickOnCircleText.setAlignHoriz('left')
        clickOnCircleText.bold = true;
    TextComponent questionText
      color = black
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentQuestion
      wrapWidth = wrapWidthText
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    TextComponent pressSpaceText
      color = black
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      text = The <next page> button will appear below after your choice. Please press the button below to continue after your choice.
      wrapWidth = wrapWidthText
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    TextComponent clickOnCircleText
      color = black
      letterHeight [set every repeat] = questionTextSize*y_scale*1.15
      pos [set every repeat] = (questionsXaxis, questionsTopYaxis*2)
      startVal [time (s)] = 0.0
      text = Click on the black circle to the left of the correct answer.
      wrapWidth = wrapWidthText
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    SliderComponent questionSlider
      borderColor = black
      color = black
      fillColor = white
      flip = True
      forceEndRoutine = False
      granularity = 1
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = sliderPosition
      size [set every repeat] = sliderSize
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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    CodeComponent updateAndRegister
      Code Type = JS
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      Begin JS Routine:
        ////////////////////////////////////////////////
        //// UPDATE SLIDER LABELS, SIZE, COLOR ETC. ////
        ////////////////////////////////////////////////

        // get slider labels from the excel file
        sliderLabels = thisStimulus_list[labelIdentifier];
        sliderLabels = sliderLabels.split(";");
        labelCount = (sliderLabels.length);
        // create tick marks so that data registry makes sense in terms of scores of each
        // label: start from 1 not 0.
        tickMarks = range(1,labelCount);

        // get the correct answer which always should be the last label
        correctAnswer = sliderLabels[labelCount-1]; // -1 because index starts with 0
        // shuffle slider labels after you get the correct answer
        shuffledLabels = randomArrayShuffle(sliderLabels)
        // display shuffled labels as tick marks
        questionSlider.setLabels(shuffledLabels);
        // change ticks of the slider
        questionSlider.setTicks(tickMarks);
        // change font of the slider text
        questionSlider.setFontSize(questionTextSize*y_scale);
        // adjust slider's position and size
        questionSlider._pos = sliderPosition;
        questionSlider._size = sliderSize;

        // change slider's color and marker properties
        questionSlider._lineColor = "black";
        questionSlider._tickColor = "white";
        questionSlider._markerColor = "white";
        questionSlider._tickSize= 15;
        questionSlider._markerSize_px = 7;

        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless participant chose one of
        // the labels.
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;

        // align texts
      Each JS Frame:
        compChoice = questionSlider.getRating();
      End JS Routine:
        if (registerResponse === 1) {
            // get the selected option among the labels
            compChoiceText = shuffledLabels[compChoice-1]; // -1 because label index starts with 0, tick mark starts with 1.
            // check if selected answer matches the correct answer
            if (correctAnswer === compChoiceText) {
                    compAccuracy = 1;
                    console.log("CORRECT ANSWER TO COMP")

                } else {
                    compAccuracy = 0;
                    console.log("WRONG ANSWER TO COMP")
                }
            accuracyTotal[0] = accuracyTotal[0] + compAccuracy
            accuracyTotal[1] = accuracyTotal[1] + 1
            // get browser zoom
            browserZoom = window.outerWidth*100 / window.innerWidth;
            // register data
            data_zoomLevel.push(browserZoom);
            data_miniRating.push([]); // empty because there is no rating but only accuracy for comprehension questionsdata_compChoice.push(compChoiceText); // empty because there is no choice during passages
            data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
            data_itemType.push("comperehension");  // item type (what appeared on the screen)
            data_compAccuracy.push(compAccuracy); // empty because there is no accuracy during passages
            data_blockName.push(blockName); // what is the name of this block
            data_trialType.push(trialType); // is this a test or a practice trial
            data_passageFont.push(currentFont); // what was the font used in this passage
            data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)
            data_dateTime.push(util.MonotonicClock.getDateStr()); // date and time
            data_passageRT.push([]); // words per minute
            data_compChoice.push(compChoiceText) // chosen option is registered as text
        }
    ImageComponent nextButton_comprehension
      image = next_button.png
      pos = (buttonX,buttonY)
      size = (buttonWidth,buttonHeight)
      startVal [condition] = questionSlider.rating
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    MouseComponent mouseComprehension
      clickable = nextButton_comprehension
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [condition] = questionSlider.rating
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  Routine displayMiniSurvey
    CodeComponent initiateSurvey
      Code Type = JS
      Begin JS Routine:
        currentTrialType = thisStimulus_list["trialType"];
        if (currentTrialType === "test") {
                registerResponse = 1;
            } else {
                    registerResponse = 0;
                }

        // create the excel column name that represents the current question text
        miniSurveyIdentifier  = ('mini'+((rand_mo[minisurvey_trials.thisN]).toString())+'text')
        labelIdentifier     = ('mini'+((rand_mo[minisurvey_trials.thisN]).toString())+'label')
        itemIDIdentifier = ('mini'+((rand_mo[passage_trials.thisN]).toString())+'ID')
        // call the question text
        currentMiniQuestion = thisStimulus_list[miniSurveyIdentifier];
        currentMiniLabel    = thisStimulus_list[labelIdentifier];
        // what is the item type (passage, comp question, mini survey?)
        itemID = thisStimulus_list[itemIDIdentifier];
        // change additional question text's centering and style
        miniSurveyText.setAlignHoriz('left')
        miniSurveyText.bold = true;
        pressMiniSpaceText.setAlignHoriz('left')
        pressMiniSpaceText.bold = true;
        clickOnCircleText_2.setAlignHoriz('left')
        clickOnCircleText_2.bold = true;
    TextComponent miniSurveyText
      color = black
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentMiniQuestion
      wrapWidth = wrapWidthText
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    TextComponent pressMiniSpaceText
      color = black
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = The <next page> button will appear below after your choice. Please press the button below to continue after your choice.
      wrapWidth = wrapWidthText
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    TextComponent clickOnCircleText_2
      color = black
      letterHeight [set every repeat] = questionTextSize*y_scale*1.15
      pos [set every repeat] = (questionsXaxis, questionsTopYaxis*2)
      startVal [time (s)] = 0.0
      text = Click on the black circle to the left of the correct answer.
      wrapWidth = wrapWidthText
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    SliderComponent miniSurveySlider
      borderColor = black
      color = black
      fillColor = white
      flip = True
      forceEndRoutine = False
      granularity = 1
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = sliderPosition
      size [set every repeat] = sliderSize
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent updateAndRegisterMini
      Code Type = JS
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      Begin JS Routine:
        ////////////////////////////////////////////////
        //// UPDATE SLIDER LABELS, SIZE, COLOR ETC. ////
        ////////////////////////////////////////////////

        // get slider labels from the excel file
        sliderLabels = thisStimulus_list[labelIdentifier];
        sliderLabels = sliderLabels.split(";");
        labelCount = (sliderLabels.length);
        // create tick marks so that data registry makes sense in terms of scores of each
        // label: start from 1 not 0.
        tickMarks = range(1,labelCount);

        // display shuffled labels as tick marks
        miniSurveySlider.setLabels(sliderLabels);
        // change ticks of the slider
        miniSurveySlider.setTicks(tickMarks);
        // change font of the slider text
        miniSurveySlider.setFontSize(questionTextSize*y_scale);
        // adjust slider's position and size
        miniSurveySlider._pos = sliderPosition;
        miniSurveySlider._size = sliderSize;
        // change slider's color and marker properties
        miniSurveySlider._lineColor = "black";
        miniSurveySlider._tickColor = "white";
        miniSurveySlider._markerColor = "white";
        miniSurveySlider._tickSize= 60;
        miniSurveySlider._markerSize_px = 40;

        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless participant chose one of
        // the labels.
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;
      Each JS Frame:
        compChoice = miniSurveySlider.getRating();
        /*
        if (compChoice >= 1 && compChoice <= labelCount) {
            if (clearEventAfterChoice === 1){
                psychoJS.eventManager.clearEvents(); // clears keypress events after choice so that previous unrelated space
                clearEventAfterChoice=0;             // does not terminate the loop prematurely
                }

            var _pj;
            function _pj_snippets(container) {
                function in_es6(left, right) {
                    if (((right instanceof Array) || ((typeof right) === "string"))) {
                        return (right.indexOf(left) > (- 1));
                    } else {
                        if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                            return right.has(left);
                        } else {
                            return (left in right);
                        }
                    }
                }
                container["in_es6"] = in_es6;
                return container;
            }

            _pj = {};
            _pj_snippets(_pj);
            keys = psychoJS.eventManager.getKeys();

                if (keys.length) {
                    if (_pj.in_es6("space", keys)) {
                        continueRoutine = false;
                    }
                }
        }
        */
      End JS Routine:
        if (registerResponse === 1) {

            // get the selected option among the labels
            compChoiceText = sliderLabels[compChoice-1]; // -1 because label index starts with 0, tick mark starts with 1.

            // get browser zoom
            browserZoom = window.outerWidth*100 / window.innerWidth;
            // register data
            data_zoomLevel.push(browserZoom);
            data_compChoice.push(compChoiceText) // chosen option is registered as text
            data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
            data_itemType.push("minisurvey");  // item type (what appeared on the screen)
            data_compAccuracy.push([]); // empty because there is no accuracy during passages
            data_miniRating.push(compChoice) // rating of the likert scale
            data_blockName.push(blockName); // what is the name of this block
            data_trialType.push(trialType); // is this a test or a practice trial
            data_passageFont.push(currentFont); // what was the font used in this passage
            data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)
            data_dateTime.push(util.MonotonicClock.getDateStr()); // date and time
            data_passageRT.push([]); // words per minute

        }
    ImageComponent nextButton_mini
      image = next_button.png
      pos = (buttonX,buttonY)
      size = (buttonWidth,buttonHeight)
      startVal [condition] = miniSurveySlider.rating
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    MouseComponent mouseMiniSurvey
      clickable = nextButton_mini
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = miniSurveySlider.rating
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  Routine writeDataToFile
    CodeComponent writeToFile
      Code Type = JS
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      Begin JS Routine:
        // write trial by trial data
        trialColumNames = ["trialNo","itemID" ,"blockName", "trialType", "FontName", "wordsPerMinute", "comprehensionAccuracy", "comprehensionChoice","miniSurveyRating"];
        iterationCountTrials = data_totalTrialIndex.length;

        // add headers right above the data
        psychoJS.experiment.addData("dateTime", "dateTime")
        psychoJS.experiment.addData(trialColumNames[0], trialColumNames[0]);
        psychoJS.experiment.addData("subid", "subid")
        psychoJS.experiment.addData("counterbalanceGroup", "counterbalanceGroup")
        psychoJS.experiment.addData(trialColumNames[1], trialColumNames[1]);
        psychoJS.experiment.addData(trialColumNames[2], trialColumNames[2]);
        psychoJS.experiment.addData(trialColumNames[3], trialColumNames[3]);
        psychoJS.experiment.addData(trialColumNames[4], trialColumNames[4]);
        psychoJS.experiment.addData(trialColumNames[5], trialColumNames[5]);
        psychoJS.experiment.addData(trialColumNames[6], trialColumNames[6]);
        psychoJS.experiment.addData(trialColumNames[7], trialColumNames[7]);
        psychoJS.experiment.addData(trialColumNames[8], trialColumNames[8]);
        psychoJS.experiment.addData("X_Scale", "X_Scale");
        psychoJS.experiment.addData("Y_Scale", "Y_Scale");
        psychoJS.experiment.addData("IsFullScreen", "IsFullScreen")
        psychoJS.experiment.addData("window_width", "window_width")
        psychoJS.experiment.addData("window_height", "window_height")
        psychoJS.experiment.addData("browser", "browser")
        psychoJS.experiment.addData("browserZoomLevel", "browserZoomLevel")
        psychoJS.experiment.nextEntry();

        // write data in long format
        for (var i, _pj_c = 0, _pj_a = util.range(0, iterationCountTrials), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            psychoJS.experiment.addData("dateTime", data_dateTime[i])
            psychoJS.experiment.addData(trialColumNames[0], data_totalTrialIndex[i]);
            psychoJS.experiment.addData("subid", participantCode)
            psychoJS.experiment.addData("counterbalanceGroup", thisGroup.group)
            psychoJS.experiment.addData(trialColumNames[1], data_itemID[i]);
            psychoJS.experiment.addData(trialColumNames[2], data_blockName[i]);
            psychoJS.experiment.addData(trialColumNames[3], data_trialType[i]);
            psychoJS.experiment.addData(trialColumNames[4], data_passageFont[i]);
            psychoJS.experiment.addData(trialColumNames[5], data_passageRT[i]);
            psychoJS.experiment.addData(trialColumNames[6], data_compAccuracy[i]);
            psychoJS.experiment.addData(trialColumNames[7], data_compChoice[i]);
            psychoJS.experiment.addData(trialColumNames[8], data_miniRating[i]);
            thisExp.addData("X_Scale", x_scale);
            thisExp.addData("Y_Scale", y_scale);
            psychoJS.experiment.addData("IsFullScreen", psychoJS.window._windowAlreadyInFullScreen)
            psychoJS.experiment.addData("window_width", psychoJS.window._size[0])
            psychoJS.experiment.addData("window_height", psychoJS.window._size[1])
            psychoJS.experiment.addData("browser", psychoJS._browser)
            psychoJS.experiment.addData("browserZoomLevel", data_zoomLevel[i])
            psychoJS.experiment.nextEntry();
        }
  Routine finalInstructions
    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        accuracyPercentage = Math.round((accuracyTotal[0] / accuracyTotal[1]) * 100)

        thanksText = "Thank you for participating!\n\n"

        fastestFontText = "You read fastest in " + fastestFontLabel + " font.\n\n";

        fastestWpmText = "You've read " + (Math.round(maxWPM)).toString() + " words per minute with your fastest font.\n\n";

        accuracyText = "You've had " + accuracyPercentage.toString() + "% accuracy on the comprehension questions.\n\n";

        furtherQuestionText = "﻿﻿If you have further questions, email team@readabilitylab.xyz\n﻿\n"

        formLinkText = "Thank you for your interest in the Virtual Readability Lab! Join our mailing list to be informed of future readability tests and research conducted by the VRL and The Readability Consortium. Simply click on the form link below."


        wholeFinalInstruction = thanksText+fastestFontText+fastestWpmText+accuracyText+furtherQuestionText+formLinkText;
        finish_instructions.setAlignHoriz('left');


        formLinkX = hsize * 3/10;
        formLinkY = 0-(vsize * 3/10);

        websiteLinkX = 0-(hsize * 3/10);
        websiteLinkY = 0-(vsize * 3/10);
      Each JS Frame:
        if (redirectMouse.isPressedIn(formLink)) {
            psychoJS.setRedirectUrls('https://forms.gle/CeJH17fwSuennK5i9','');
            continueRoutine= false
            }


        if (redirectMouse.isPressedIn(websiteLink)) {
            psychoJS.setRedirectUrls('https://readabilitylab.xyz','');
            continueRoutine= false
            }
    TextComponent finish_instructions
      color = black
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $wholeFinalInstruction
      wrapWidth = wrapWidthText
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    TextComponent formLink
      color = -1.0000, -1.0000, 1.0000
      letterHeight = instructionTextSize*y_scale
      pos = (formLinkX, formLinkY)
      startVal [time (s)] = 0.0
      text = Fill out the form
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    TextComponent websiteLink
      color = -1.0000, -1.0000, 1.0000
      letterHeight = instructionTextSize*y_scale
      pos = (websiteLinkX, websiteLinkY)
      startVal [time (s)] = 0.0
      text = Return to our website
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    MouseComponent redirectMouse
      clickable = formLink,websiteLink
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine waitForNormalization
    CodeComponent normalizationCode
      Code Type = JS
      Begin JS Experiment:
        //// CAUTION ABOUT THE ORDER OF FONT FAMILY NAMES AND DIRECTORIES ////

        // place the family name and directory of the practice font in the first element ALWAYS
        // in the example below the practice font is Arial
        fontNames = ['ArialNormalized','GaramondNormalized','LexendNormalized','MontserratNormalized','NotoSansNormalized','RobotoNormalized','TimesNormalized'];
        fontDirectories = ['fonts/ArialFont.woff','fonts/Garamond.woff','fonts/LexendDeca.woff','fonts/Montserrat.woff','fonts/NotoSans.woff','fonts/Roboto.woff','fonts/TimesNew.woff'];
        howManyFonts = 7;
        normalized_xsizes = {};
        heightDifferences = {};
      Begin JS Routine:
        waitFor10Secs_2.setAlignHoriz("center");
        normiteration= normalizeFontTrials.thisN;
        console.log('norm iteration', normiteration)
        yourX = gen_normalization(fontDirectories[normiteration],fontNames[normiteration],fontNames[normiteration])
      End JS Routine:
        normXsize = yourX;
        console.log('norm output',normXsize)
        // create normalized font size
        customXsize=[]
        customXsize = Math.ceil(baseSizePixels * normXsize * passageSizeMultiplier);
        console.log('custom norm size',customXsize)

        // register normalized font size (for display) in pixels
        normalized_xsizes[fontNames[normiteration]] = customXsize;
        console.log('normalized vector',normalized_xsizes)
        // estimate the height difference for Y axis shift
        HeightDif=[]
        HeightDif = ((baseSizePixels)-Math.ceil(baseSizePixels * normXsize))*2;

        // adjust for Y axis shift after normalization
        if (HeightDif < 0) {
                HeightDif = Math.ceil(HeightDif);
            } else {
                    HeightDif = Math.floor(-HeightDif);
                }
        heightDifferences[fontNames[normiteration]] = HeightDif;
        console.log(fontNames[normiteration],'normSize',normXsize,'height difference',HeightDif);
    TextComponent waitFor10Secs_2
      color = black
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      wrapWidth = wrapWidthText
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      text:
        We are calibrating the test files for you.

        This shouldn't take more than 10 seconds.

        Please wait until the test instructions appear on the screen.
    KeyboardComponent key_resp_8
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine generalInstructions2
    TextComponent generalInstructionsText_2
      color = black
      letterHeight [set every repeat] = instructionTextSize
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        This test consists of several parts. The 1st part is a warm-up. Then you will complete 6 short rounds of reading passagess and comprehension questions.

        During the reading sections, please read as quickly as you can, without reading out-loud or re-reading. However, be prepared to answer comprehension questions about the passage. You must select an answer to each question and press the button at the bottom of the screen to advance to the next page.

        If you want to take a break, please do so while on an instruction page, not during the reading rounds as the timer will be running.

        If you have questions, contact the primary investigator: Ben D. Sawyer, team@readabilitylab.xyz

        Please sit at arm's length from the screen and try not to move your chair or move the distance of your head relative to the screen. Do not refresh the browser as it will reset the test.

        Please press the button below to continue.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = JS
      Begin JS Routine:
        generalInstructionsText_2.setAlignHoriz("left");
    ImageComponent nextButton_Instructions
      image = next_button.png
      pos = (buttonX,buttonY)
      size = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseInstructions
      clickable = nextButton_Instructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 2
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  Routine findFastest
    CodeComponent newBest
      Code Type = JS
      Begin JS Routine:
        currentDictionaryWpm = + wpm;
        currentDictionaryDivisor =  + 1;
        averageFontWpm = []
        wpmDictionary = []
        fontWpm = []
        fontDivisior = []
        fontAverageWpm = []

        for (var i = 0; i < blockFontCount; i++) {
          wpmDictionary = getFastestFont[blockFonts[i]];
          fontWpm = wpmDictionary[0];
          fontDivisior = wpmDictionary[1];
          fontAverageWpm = fontWpm / fontDivisior;
          averageFontWpm[i] = fontAverageWpm;
        }

        console.log('avg wpm array',averageFontWpm);
        maxWPM = []
        minWPM = []
        maxIndex = []
        minIndex = []


        maxWPM = Math.max(...averageFontWpm);
        minWPM = Math.min(...averageFontWpm);

        maxIndex = averageFontWpm.indexOf(maxWPM);
        minIndex = averageFontWpm.indexOf(minWPM);

        fastestFont = blockFonts[maxIndex];  // using calculated fastest font
        fastestFontLabel = blockFontLabels[maxIndex];
        console.log('fastest wpm',maxWPM);
        console.log('fastest font',fastestFont);
        console.log('fastest font label',fastestFontLabel)

        slowestFont = blockFonts[minIndex];  // using calculated fastest font
        slowestFontLabel = blockFontLabels[minIndex];
        console.log('slowest wpm',minWPM);
        console.log('slowest font',slowestFont);
        console.log('slowest font label',slowestFontLabel)
    CodeComponent findBestFont
      Code Type = JS
      disabled = True
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      Begin JS Routine:
        // if this is a testing block (blockName = "testFastest") where fastest
        // font OR other typographical parameters are found.
        if ((blockName === "testFastest")) {
            data_blockName2= data_blockName;        // create backup
            data_passageFont2 = data_passageFont;   // create backup
            // extract unique block names
            var uniqueTestBlockNames = data_blockName2.filter((item, i, ar) => ar.indexOf(item) === i);
            // extract unique font names
            var uniqueFontNames = data_passageFont2.filter((item2, ik, arr) => arr.indexOf(item2) === ik);

            // remove the first font name which is the practice font
            // practice font is the first font in the blockFontsForDisplay string array.
            // we will delete this font from the unique font names to exclude practice trials
            // from fastest and slowest calculations.

            /*
            practiceFont = blockFontsForDisplay[0];
            for( var i = 0; i < uniqueFontNames.length; i++){
                if ( uniqueFontNames[i] === practiceFont) {
                   uniqueFontNames.splice(i, 1);
                }
            }
            */
            numberOfFonts = uniqueFontNames.length;
            fontRTarray = [];
            fontDivisionArray = [];
            for (var i, _pj_c = 0, _pj_a = util.range(0, numberOfFonts), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                fontRTarray.push(0);
                fontDivisionArray.push(0);
            }

            // get the numeric index of passage items
            getIndexPassage = findIndices(data_itemType, "passage");

            // check variables on console
            console.log('number of fonts',numberOfFonts);
            console.log('block names',uniqueTestBlockNames);
            console.log('font names',uniqueFontNames);
            console.log('font RT array',fontRTarray);
            console.log('passage indices', getIndexPassage);

            for (var passidx1, _pj_c = 0, _pj_a = getIndexPassage, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                passidx1 = _pj_a[_pj_c];

                currentFontType = data_passageFont[passidx1];

                currentRT = parseFloat(data_passageRT[passidx1]);

                var getFontRTIdx = findIndices(uniqueFontNames, currentFontType);
                getFontRTIdx = getFontRTIdx[0];
                fontRTarray[getFontRTIdx] = (fontRTarray[getFontRTIdx] + currentRT);
                fontDivisionArray[getFontRTIdx] = parseFloat((fontDivisionArray[getFontRTIdx] + 1));


                // check variables on console
                console.log('below index for current font', passidx1);
                console.log('below currentFontType', currentFontType);
                console.log('current RT',currentRT);

            }
            for (var i, _pj_c = 0, _pj_a = util.range(0, numberOfFonts), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                fontRTarray[i] = (fontRTarray[i] / fontDivisionArray[i]);
            }
            // get the minimum and maximum RTs
            const RTKeys = Object.keys(fontRTarray);

            const RTValues = RTKeys.map(key => {
              return fontRTarray[key];
            });

            const slowestReadingSpeed = Math.max.apply(null, RTValues);

            const fastestReadingSpeed = Math.min.apply(null, RTValues);

            var getIndexFastestFont = fontRTarray.indexOf(fastestReadingSpeed);
            var getIndexSlowestFont = fontRTarray.indexOf(slowestReadingSpeed);
            var fastestFont = uniqueFontNames[getIndexFastestFont];
            var slowestFont = uniqueFontNames[getIndexSlowestFont];


            // check variables on console
            console.log("RT keys",RTKeys); // 👉️ ['num1', 'num2', 'num3', 'num4']
            console.log("RT values",RTValues); // 👉️ [10, 20, 5, 15]
            console.log('below slowest speed', slowestReadingSpeed);
            console.log('below fastest  speed', fastestReadingSpeed);
            console.log('below fastest index1', getIndexFastestFont);
            console.log('below slowest index', getIndexSlowestFont);
            console.log('below fastest font', uniqueFontNames[getIndexFastestFont]);
            console.log('below slowest font', uniqueFontNames[getIndexSlowestFont]);
        }
        console.log('font RT array',fontRTarray)
        console.log('unique font names',uniqueFontNames)
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  Routine donotuseSAFARI
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent welcomeText
      image = welcomeText.png
      size = [1320,726]
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent safariText
      color = black
      disabled = True
      letterHeight [set every repeat] = instructionTextSize
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        Warning: Please do not use Safari while taking this test!

        Warning: This test only works on computers, please do not use your phone to take this test.

        Please press the button below to continue.
    CodeComponent code_10
      Code Type = JS
      Begin JS Routine:
        //safariText.setAlignHoriz("left");


        nextButton_warning.setSize([buttonWidth,buttonHeight])
        nextButton_warning.setPos([buttonX,buttonY])
    ImageComponent nextButton_warning
      image = next_button.png
      pos = (buttonX,buttonY)
      size = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseWarning
      clickable = nextButton_warning
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 2
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    TextComponent text
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You will be asked to place a credit/debit card onto a card image to resize your screen in the next page. Please place your card on the image and use arrow keys to resize the image and make it the same size as your card.
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Flow
  Routine initialize
  Routine donotuseSAFARI
  Routine generalInstructions2
  LoopInitiator normalizeFontTrials loopType="TrialHandler"
    loopType = sequential
    nReps = howManyFonts
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    Routine waitForNormalization
  LoopTerminator normalizeFontTrials
  LoopInitiator blocks loopType="TrialHandler"
    conditions = [{'exp_blocks': 'stimuli/newsetformat.xlsx', 'practiceTrials': 1, 'testTrials': 6, 'fontsInvolved': 'RobotoFlex_wght200;RobotoFlex_wght400;RobotoFlex_wght600'}]
    conditionsFile = blocks/blocks_1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine setBlockParameters
    LoopInitiator stimulus_list loopType="TrialHandler"
      Selected rows = $passageSetOrder
      conditionsFile = $stimulus_file
      loopType = sequential
      nReps = 1
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      Routine setTrialParameters
      Routine instructions_passage
      LoopInitiator passage_trials loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = passageCount
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        Routine displayPassaages
      LoopTerminator passage_trials
      Routine instructions_questions
      LoopInitiator question_trials loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = questionCount
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        Routine displayQuestions
      LoopTerminator question_trials
      LoopInitiator minisurvey_trials loopType="TrialHandler"
        loopType = sequential
        nReps = miniSurveyCount
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        Routine displayMiniSurvey
      LoopTerminator minisurvey_trials
    LoopTerminator stimulus_list
    Routine findFastest
  LoopTerminator blocks
  Routine writeDataToFile
  Routine finalInstructions
